<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
    <!-- Noise prewhitening -->
    <gadget><name>NoiseAdjust</name><dll>gadgetron_mricore</dll><classname>NoiseAdjustGadget</classname></gadget>
 
    
    <!-- Convert gradient waveforms into trajectories -->
    <gadget>
        <name>WaveformToTrajectory</name>
        <!--<dll>nhlbi_gt_toolbox</dll> -->
        <dll>nhlbi_gt_gadgets</dll>
        <classname>WaveformToTrajectory</classname>
        <property><name>perform_GIRF</name><value>true</value></property>
         <property><name>GIRF_folder</name><value>/opt/GIRF/GIRF_20250225/</value></property>
         <property><name>attachWaveform</name><value>false</value></property>
	    <property><name>generateTraj</name><value>true</value></property>
    </gadget>

    <gadget>
        <name>RemoveNavsGadget</name>
        <!--<dll>nhlbi_gt_toolbox</dll> -->
        <dll>nhlbi_gt_gadgets</dll>
        <classname>RemoveNavsGadget</classname>
    </gadget>

    <gadget>
        <name>RemoveSpiralOversampling</name>
        <!--<dll>nhlbi_gt_toolbox</dll> -->
        <dll>nhlbi_gt_gadgets</dll>
        <classname>RemoveSpiralOversampling</classname>
    </gadget>

    <gadget>
            <name>Spiral_Rovir</name>
            <!--<dll>nhlbi_gt_toolbox</dll> -->
            <dll>nhlbi_gt_gadgets</dll>
            <classname>Spiral_Rovir</classname>
            <property><name>combine_csm</name><value>1</value></property>
            <property><name>send_csm</name><value>0</value></property>
    </gadget>


    <!-- <external>
        <connect port="2020" />
        <configuration>
        </configuration>
    </external>  -->

    <external>
        <execute name="ROVirGadget" target="ROVirGadget" type="python" />
        <!-- <connect port="2020" /> -->
        <configuration>
        <property name="storage_port"         value="9113"/>
       </configuration>
    </external> 


    <!-- Image Array Scaling -->
    <!-- <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>-->

        <!-- parameters for debug and timing -->
       <!-- <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>min_intensity_value</name><value>0</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>1.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>10.0</value></property>
    </gadget>-->

    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>
    
    <gadget>
    <name>AutoScaleGadget</name>
    <dll>gadgetron_mricore</dll>
        <classname>AutoScaleGadget</classname>
    </gadget>

    <!--      <gadget>
            <name>scalingGadget</name>
            <dll>nhlbi_gt_toolbox</dll>
            <classname>scalingGadget</classname>
        </gadget>-->
     
   
   <gadget>
    <name>FloatToShort</name>
    <dll>gadgetron_mricore</dll>
    <classname>FloatToUShortGadget</classname>
  </gadget>
    
    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</stream>
</configuration>

